PsychoPy2experiment version="1.80.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'Mano (D/S)': u'D', u'Genere (M/F)': u'M', u'participant': u'1', u'Et\xe0': u'1', u'Nome': u'Leo'}
  Save csv file = True
  expName = metaphor-comprehension
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine reset
    TextComponent Fixation_point
      color = red
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine welcome_message
    CodeComponent code
      Begin Experiment:
        import utils.shuffleRows as shuffleRows
        file_input = ['./stimuli/arguments.csv', './stimuli/distractors.csv']
        file_output = '/tmp/arguments.csv'
        # TODO to uncocoment
        #shuffleRows.ShuffleRows(file_input, file_output)

        import codecs, os
        def open_codecs(filename):
            return codecs.open(os.path.realpath(filename), encoding='utf-8')
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent introduction
      text = $open_codecs('instructions/welcome.txt').read()
      startVal [time (s)] = 0.5
      font = Comic Sans MS
      letterHeight = 0.08
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    TextComponent end_introduction
      color = yellow
      text = $open_codecs('instructions/space_bar.txt').read()
      pos = [0, -0.8]
      startVal [time (s)] = 0.5
      font = Comic Sans MS
      letterHeight = 0.07
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    KeyboardComponent response
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.5
      store = nothing
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  Routine instructions_message
    TextComponent instructions_text
      text = $open_codecs('instructions/experiment.txt').read()
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.053
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    TextComponent show_arguments
      color = yellow
      pos = [0, -0.8]
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.05
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      text:
        $open_codecs('instructions/show_arguments.txt').read()
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine missing_word
    TextComponent missing_text_word
      color = red
      text [set every repeat] = $TW
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.18 
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  Routine question
    TextComponent question_text
      text = $open_codecs('instructions/question.txt').read()
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.09
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    KeyboardComponent response_to_question_text
      forceEndRoutine = True
      allowedKeys = '1', '0'
      startVal [time (s)] = 0.0
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    TextComponent answer_text
      color = yellow
      text = $open_codecs('instructions/answer_to_question.txt').read()
      pos = [0, -0.55]
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.1
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    CodeComponent arg_loop_pp
      Begin Experiment:
        # Pause during the experiment
        argument_loop_cout = 0
        def show_pause_msg(message):
            msg = visual.TextStim(win, text = message)
            while True:
                msg.draw()
                win.flip()
                if len(event.getKeys(keyList=['p']))>0:
                    break
                event.clearEvents()
      End Routine:
        # it displays a message in order to pause the experiment
        argument_loop_cout = argument_loop_cout + 1
        if argument_loop_cout == 2:
            text = open_codecs('instructions/pause.txt').read()
            show_pause_msg(text)
      End Experiment:
        text = open_codecs('instructions/end.txt').read()
        show_pause_msg(text)
  Routine fixation_point
    TextComponent fixation_point_symbol
      color = red
      text [set every repeat] = +
      stopVal [duration (s)] = 0.500
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine arguments
    TextComponent arguments_text
      text [set every repeat] = 'P1: ' + $premise1 + '\n\n' +'P2: ' + $premise2 +'\n_______________________________\n\n' + 'C: ' + $conclusion
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.08
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    KeyboardComponent argument_read
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent missing_word_text
      color = yellow
      text = $open_codecs('instructions/show_missing_word.txt').read()
      pos = [0, -0.7]
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.052
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Flow
  Routine welcome_message
  Routine instructions_message
  LoopInitiator arguments_loop loopType="TrialHandler"
    conditionsFile = ../../../../../private/tmp/arguments.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ArgumentType': u'TPTC', 'ArgumentNumber': 1, 'TWType': u'V', 'TW': u'SAMBA', 'premise2': u'Una ... \xe8 vivace ', 'premise1': u'La gioia \xe8 una ... ', 'conclusion': u'La gioia \xe8 vivace', 'ArgumentBlock': u'P', 'CorrectAnswer': u'Y'},
      {'ArgumentType': u'TPFC', 'ArgumentNumber': 2, 'TWType': u'V', 'TW': u'SCIALUPPA', 'premise2': u'Una ... Scende dalla nave ', 'premise1': u'Il conforto \xe8 una ... ', 'conclusion': u'Il conforto scende dalla nave', 'ArgumentBlock': u'P', 'CorrectAnswer': u'N'},
      {'ArgumentType': u'distrattore', 'ArgumentNumber': 2, 'TWType': u'distrattore', 'TW': u'MOGLIE', 'premise2': u'Una ... \xe8 una donna sposata ', 'premise1': u'Luigi ha una ... ', 'conclusion': u'Luigi \xe8 una donna sposata', 'ArgumentBlock': u'P', 'CorrectAnswer': u'N'},
      {'ArgumentType': u'distrattore', 'ArgumentNumber': 1, 'TWType': u'distrattore', 'TW': u'MEDICINA', 'premise2': u'... \xe8 una scienza ', 'premise1': u'Franco studia ...  ', 'conclusion': u'Franco studia una scienza', 'ArgumentBlock': u'P', 'CorrectAnswer': u'Y'},
      {'ArgumentType': u'TPPC', 'ArgumentNumber': 2, 'TWType': u'L', 'TW': u'APPRODO', 'premise2': u'Un ... consente il riposo ', 'premise1': u'La laurea \xe8 un ... ', 'conclusion': u'La laurea consente il riposo', 'ArgumentBlock': u'P', 'CorrectAnswer': u'N'}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
    Routine fixation_point
    Routine arguments
    Routine missing_word
    Routine question
  LoopTerminator arguments_loop
